CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:RGB
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:RGB
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:WholeCell
    Typical diameter of objects, in pixel units (Min,Max):200,20000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:7|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
    Select the input image:OrigGreen
    Name the output image:Masked_Green
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeCell
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    Invert the mask?:No

MaskImage:[module_num:8|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
    Select the input image:OrigRed
    Name the output image:Masked_Red
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeCell
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    Invert the mask?:No

MeasureImageIntensity:[module_num:9|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
    Select images to measure:Masked_Green
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:10|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
    Select images to measure:Masked_Red
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:4
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Green_Math
    Image or measurement?:Image
    Select the first image:Masked_Green
    Multiply the first image by:1
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    Image or measurement?:Measurement
    Select the second image:OrigGreen
    Multiply the second image by:1
    Measurement:Intensity_MedianIntensity_Masked_Green

ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:4
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Red_Math
    Image or measurement?:Image
    Select the first image:Masked_Red
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:OrigGreen
    Multiply the second image by:1
    Measurement:Intensity_MedianIntensity_Masked_Red

GaussianFilter:[module_num:13|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
    Select the input image:Green_Math
    Name the output image:Green_Gaus
    Sigma:3

GaussianFilter:[module_num:14|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
    Select the input image:Green_Math
    Name the output image:Green_Gaus2
    Sigma:1

GaussianFilter:[module_num:15|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
    Select the input image:Red_Math
    Name the output image:Red_Gaus
    Sigma:3

GaussianFilter:[module_num:16|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
    Select the input image:Red_Math
    Name the output image:Red_Gaus2
    Sigma:1

ImageMath:[module_num:17|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:3
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:green_gaussDif
    Image or measurement?:Image
    Select the first image:Green_Gaus2
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:Green_Gaus
    Multiply the second image by:1
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
ImageMath:[module_num:18|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:3
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:red_gaussDif
    Image or measurement?:Image
    Select the first image:Red_Gaus2
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:Red_Gaus
    Multiply the second image by:1
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:green_gaussDif
    Name the primary objects to be identified:Green_Objects_Otsu
    Typical diameter of objects, in pixel units (Min,Max):3,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.02,0.18
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Otsu

MaskImage:[module_num:20|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
    Select the input image:Green_Math
    Name the output image:Masko_Green
    Use objects or an image as a mask?:Objects
    Select object for mask:Green_Objects_Otsu
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:red_gaussDif
    Name the primary objects to be identified:Red_Objects_Otsu
    Typical diameter of objects, in pixel units (Min,Max):3,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.02,0.18
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Otsu

MaskImage:[module_num:22|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
    Select the input image:Red_Math
    Name the output image:Masko_Red
    Use objects or an image as a mask?:Objects
    Select object for mask:Red_Objects_Otsu
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:Masko_Green
    Name the primary objects to be identified:Green_Objects_Otsu2
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.02,0.08
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:24|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
    Select the input image:Masko_Red
    Name the primary objects to be identified:Red_Objects_Otsu2
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.02,0.08
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

MaskObjects:[module_num:25|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
    Select objects to be masked:Green_Objects_Otsu2
    Name the masked objects:Green_Obj_Otsu_mask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Red_Objects_Otsu2
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:26|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
    Parent objects:Green_Obj_Otsu_mask
    Child objects:Red_Objects_Otsu2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ClassifyObjects:[module_num:27|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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Green_Obj_Otsu_mask
    Select the measurement to classify by:Children_Red_Objects_Otsu2_Count
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:OTSU_YES
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

ImageMath:[module_num:28|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Green_Math2
    Image or measurement?:Image
    Select the first image:Masked_Green
    Multiply the first image by:1
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    Image or measurement?:Measurement
    Select the second image:OrigGreen
    Multiply the second image by:1
    Measurement:Intensity_MedianIntensity_Masked_Green

MeasureObjectIntensity:[module_num:29|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
    Select images to measure:OrigGreen
    Select objects to measure:Green_Obj_Otsu_mask

MeasureObjectIntensity:[module_num:30|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
    Select images to measure:Green_Math2
    Select objects to measure:Green_Obj_Otsu_mask

MeasureObjectSizeShape:[module_num:31|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enabled:False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
    Select object sets to measure:Green_Obj_Otsu_mask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Green_Obj_Otsu_mask|Number_Object_Number,Green_Obj_Otsu_mask|Intensity_IntegratedIntensity_OrigGreen,Green_Obj_Otsu_mask|Intensity_IntegratedIntensity_Green_Math2,Image|Count_Green_Obj_Otsu_mask,Image|FileName_RGB
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Green_Obj_Otsu_mask
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
